// These are the user defined global variables needed to run the countermanding task
//
// written by david.c.godlove@vanderbilt.edu 	January, 2011

declare int		Trl_number;
declare int		Comp_Trl_number;
declare int		Correct_trls;
declare int		Block_number;
declare int		Trls_per_block;			// for one directional reward paradigm

//----------------------------------------------------------------------------------------------------------------
// Trial type distributions (must sum to 100)
declare float	Go_weight;				// percentage of go trials
declare float	Stop_weight;			// percentage of stop trials
declare float	Ignore_weight;			// percentage of ignore trials

declare int		DR1_flag;				// shows that we are doing 1DR version of task

declare float	Bonus_weight;			// percentage of time that the subject is wrong but gets rewarded anyway.
declare float	Dealer_wins_weight;		// percentage of time that the subject is right but gets punished anyway.

declare float	BigR_weight;			// weights for random changes of reward size
declare float	MedR_weight;			// weights for random changes of reward size
declare float	SmlR_weight;			// weights for random changes of reward size
declare float	SmlP_weight;			// weights for random changes of punsiment size
declare float	MedP_weight;			// weights for random changes of punsiment size
declare float	BigP_weight;			// weights for random changes of punsiment size


//----------------------------------------------------------------------------------------------------------------
// Stimulus properties
declare int		Classic;				// emulates the old stop signal task
declare int		Stop_sig_color[3];		// need to make this more finely adjustable for luminance matching
declare int		Ignore_sig_color[3];	// need to make this more finely adjustable for luminance matching
declare int		Fixation_color[3];		// need to make this more finely adjustable for luminance matching
declare int		Mask_sig_color[3];		//temporal
declare int		N_targ_pos;				// number of target positions (need to calculate this myself based on user input)
declare int		Color_list[10,3];		// color of each target individually (see critique above)
declare float	Size_list[10];			// size of each target individually (degrees)
declare float	Angle_list[10];			// angle of each target individually (degrees)
declare float	Eccentricity_list[10];	// distance of each target from center of screen individually (degrees)
declare float	Reward_weight_list[10];	// for setting size of reward differently depending on location of target (1DR) 
declare float	Fixation_size;			// size of the fixatoin point (degrees)
declare int		Set_Tones;				// sets up the tones to either high or low based on user input
declare int		Success_Tone_bigR;		// positive secondary reinforcer in Hz (large reward)
declare int		Success_Tone_medR;		// positive secondary reinforcer in Hz (medium reward)
declare int		Success_Tone_smlR;		// positive secondary reinforcer in Hz (small reward)		
declare int		Failure_Tone_smlP;		// negative secondary reinforcer in Hz (short timeout)
declare int		Failure_Tone_medP;		// negative secondary reinforcer in Hz (medium timeout)
declare int		Failure_Tone_bigP;		// negative secondary reinforcer in Hz (long timeout)
declare int		Fixation_Target;		// Target number for the fixation task (changed by key macros);


//----------------------------------------------------------------------------------------------------------------
declare float	Fix_win_size;			// size of fixation window (degrees)
declare float	Targ_win_size;			// size of target window (degrees)



//----------------------------------------------------------------------------------------------------------------
// Task timing paramaters (all times in ms unless otherwise specified)
declare int		Allowed_fix_time;		// subject has this long to acquire fixation before a new trial is initiated
declare int		Expo_Jitter;			// defines if exponential holdtime is used or if holdtime is sampled from rectanglular dist.
declare int		Expo_Jitter_SOA;		// defines if exponential holdtime is used for fixation offset in mem guided sacc task
declare int		Min_Holdtime;			// minimum time after fixation before target presentation
declare int		Max_Holdtime;			// maximum time after fixation before target presentation
declare int		Min_SOA;				// minimum time from target onset to fixation offset (mem guided only)
declare int		Max_SOA;				// maximum time from target onset to fixation offset (mem guided only)
declare int		Min_saccade_time;		// for training subjects to slow down if necessary
declare int		Max_saccade_time;		// subject has this long to saccade to the target
declare int		Max_sacc_duration;		// once the eyes leave fixation they must be in the target before this time is up
declare int		Targ_hold_time;			// after saccade subject must hold fixation at target for this long
declare int		N_SSDs;					// number of stop signal delays (need to calculate this myself)
declare int		Max_SSD;				// longest SSD
declare int		Min_SSD;				// shortest SSD
declare int		N_SOAs;
declare int		Max_SOA;
declare int 	Min_SSD;
declare int 	SSD_floor;				// for training to cancel consistantly
declare int 	SSD_ceil;				// for training to cancel consistantly
declare int		Staircase;				// do we select the next SSD based on a staircasing algorithm?
declare float	SSD_list[20];			// needs to be in refresh rate units
declare float	SOA_list[20];			// needs to be in refresh rate units
declare int		Cancl_time;				// subject must hold fixation for this long on a stop trial to be deemed canceled
declare int		Tone_Duration;			// how long should the error and success tones be presented?
declare int		Reward_Offset;			// how long after tone before juice is given (needed to seperate primary and secondary reinforcement)
declare int		Base_Reward_time;		// how long will the juice solonoid remain open (monkeys are very interested in this varaible)
declare int		Base_Punish_time;		// time out for messing up
declare int		Bmove_tout;				// additive timeout imposed for each body movement
declare int		Move_ct;				// Output lets us know how many times the body has moved.
declare int		Max_move_ct;			// Setting maximum move_ct so monkey doesn't self-punish to eternity
declare int		TrainingStill;			// Indicates that we are using motion detector to train the monk to be still
declare int		Canc_alert;				// Alert operator that the monk has canceled a trial (during training)
declare int		Fixed_trl_length;		// 1 for fixed trial length, 0 for fixied inter trial intervals
declare int		Trial_length;			// fixed at this value (only works if Fixed_trl_length == 1) must figure out max time for this variable and include it in comments
declare int		Inter_trl_int;			// how long between trials (only works if Fixed_trl_length == 0)
declare int 	Exp_juice;				// Exponential juice reward duration by reaction time
declare int 	nogosoa;
//------------------------------------------------------------------------------------------------------------------
// Globals needed for multiple processes which must be declared here to avoid dependancy conflicts
declare int Reward_duration;			//GLOBAL OUTPUT FOR INFOS.pro will be set by END_TRL.pro
declare int Punish_time;				//GLOBAL OUTPUT FOR INFOS.pro will be set by END_TRL.pro
declare int Success_tone;				//GLOBAL OUTPUT FOR INFOS.pro will be set by END_TRL.pro
declare int Failure_tone;				//GLOBAL OUTPUT FOR INFOS.pro will be set by END_TRL.pro










