//------------------------------------------------------------------------
// process SET_COOR(float screenWidth, float screenHeight, float subjDist);
// determine virtual coordiates in degrees based on screen size and 
// subject distance to the screen
// NOTE 1:  all measurements must be in the same units (doesn't matter what units).
// NOTE 2:  accuracy (and hence step targSize of stimuli) is in 0.1 degree incriments
// NOTE 3:  since accuracy is in 0.1 degree incriments, input measurements must 
// 			have corresponding resolution (this depends on distance from screen)
//
// written by david.c.godlove@vanderbilt.edu 	January, 2011


declare hide float Deg2Pix_X;
declare hide float Deg2Pix_Y; 
declare hide float Unit2Pix_X;
declare hide float Unit2Pix_Y;
						/*OUTPUT: these conversion factors will be used throughout protocol when drawing
				         (this is necessary b/c unless you are really careful with virtual coordinates
				         you wil end up with stimuli which are slightly off, and what is the point of 
				         using virtual coordinates if you have to be super careful about it?)*/
		  
				 
declare SET_COOR();						// see RIGSETUP.pro for variable explanation

process SET_COOR() 						// see RIGSETUP.pro for variable explanation
	{
	
	declare hide float half_width;  
	declare hide float half_height; 	
	declare hide float deg_x;
	declare hide float deg_y; 
	
	// get half of screen targSize
	half_width  = screenWidth / 2;  						// right now we are thinking about cm, inches, mm, or whatever you measured in
	half_height = screenHeight / 2;
	
	// figure out dimensions in degrees
	deg_x  = rad2deg(atan (half_width / subjDist)); 	//tangent(theta) = opposite/adjacent
	deg_y  = rad2deg(atan (half_height / subjDist));
	
	// get half of screen targSize in pixels
	half_width  = screenPixelX / 2;  						// now we are thinking about pixels
	half_height = screenPixelY / 2;
	
	// set screen in pixel coordinates with the origin in center
	dsendf("vc %d, %d, %d, %d\n",-1*half_width,half_width,half_height,-1*half_height);
	
	Deg2Pix_X = half_width/deg_x;
	Deg2Pix_Y = half_height/deg_y;
	
	Unit2Pix_X = screenPixelX/screenWidth;
	Unit2Pix_Y = screenPixelY/screenHeight;
	
	}